CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['scoTo begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file doesnot contain "(DAPI+GFP") (file doesnot contain "_Brightfield") (file doesnot contain ".zvi") (file doesnot contain ".tif")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'Note: this pipeline works best with a 6-8 h induction period.']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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Date": "none", "FileLocation": "text", "Frame": "integer", "Series": "none"}
    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_DAPI.JPG")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_GFP.JPG")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_DsRed.JPG")
    Name to assign these images:DsRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:ChannelName

IdentifyPrimaryObjects:[module_num:5|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notes:['Identifies and segregates nuclei by size (40-100 pixels) and shape from the DAPI channel. Uses adaptive Otsu three class (foreground) thresholding. The threshold parameters are set as follows: threshold smoothing scale: 1.3488; threshold correction factor: 1; lower and upper bounds on threshold: 0.01-1.0. Adaptive threshold window is set at 20 pixels.', '']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):80,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.005,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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notes:['Expanding the nucleus by a four pixels to include any foci that may be protruding from the nuclear membrane. ']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
    Select the input objects:Nuclei
    Name the objects to be identified:nuclear_periphery
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DAPI
    Number of pixels by which to expand the primary objects:8
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:nuclear_periphery
    Name the objects to be identified:tdTomato
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:DsRed
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.25
    Lower and upper bounds on threshold:0.015,0.07
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
EnhanceOrSuppressFeatures:[module_num:8|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notes:['Enhancing the nuclear foci features using speckle features to decrease contributions by background noise. The largest feature size it considers is 15 pixels which should be high enough for the majority of nuclear foci. Can be adjusted as needed.']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
    Select the input image:GFP
    Name the output image:EnhanceMLF2_GFP
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:9|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notes:['Identifies and segregates foci anywhere in the cell by size (1 to 15 pixels) and intensity from the GFP channel. Uses adaptive Otsu three class (foreground) thresholding. The threshold parameters are set as follows: threshold smoothing scale: 1.3488; threshold correction factor: 1.2; lower and upper bounds on threshold: 0.04-1.0. Adaptive threshold window is set at 50 pixels.', '', 'Note changed lower bounds from 0.04 (for antibodies) to 0.07 for MLF2-GFP (6 hour induction)', '0.03 for OSMI-1', '', 'Adjusted WAC images to a threshold of 0.05 (due to higher exposure times). -- used to be 0.005', '', 'Changed diameter to 3-15']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
    Select the input image:EnhanceMLF2_GFP
    Name the primary objects to be identified:GFP_foci
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.025,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:160
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    Thresholding method:Otsu

RelateObjects:[module_num:10|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notes:['Returns the number of foci per nucleus']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
    Parent objects:Nuclei
    Child objects:GFP_foci
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:foci_MLF2
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
MeasureImageAreaOccupied:[module_num:11|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Nuclei, foci_MLF2, tdTomato

MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:Nuclei, foci_MLF2, tdTomato
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensityDistribution:[module_num:13|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
    Select images to measure:DAPI, DsRed, GFP
    Hidden:2
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:foci_MLF2
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectIntensity:[module_num:14|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
    Select images to measure:DsRed
    Select objects to measure:Nuclei, tdTomato

MeasureTexture:[module_num:15|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
    Select images to measure:DAPI, DsRed, GFP
    Select objects to measure:Nuclei, foci_MLF2, tdTomato
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

FilterObjects:[module_num:16|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
    Select the objects to filter:tdTomato
    Name the output objects:NotExpressed
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MedianIntensity_DsRed
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:0.0149
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
FilterObjects:[module_num:17|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
    Select the objects to filter:tdTomato
    Name the output objects:SlightlyExpressed
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MedianIntensity_DsRed
    Filter using a minimum measurement value?:Yes
    Minimum value:0.015
    Filter using a maximum measurement value?:Yes
    Maximum value:0.049
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
FilterObjects:[module_num:18|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
    Select the objects to filter:tdTomato
    Name the output objects:HighlyExpressed
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MedianIntensity_DsRed
    Filter using a minimum measurement value?:Yes
    Minimum value:0.05
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:19|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
    Select the objects to filter:Nuclei
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MedianIntensity_DsRed
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.01
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
MaskObjects:[module_num:20|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enabled:False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
    Select objects to be masked:Nuclei
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Image
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    Select the masking image:DsRed
    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

DisplayDataOnImage:[module_num:21|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
    Display object or image measurements?:Object
    Select the input objects:tdTomato
    Measurement to display:Intensity_MedianIntensity_DsRed
    Select the image on which to display the measurements:DsRed
    Text color:red
    Name the output image that has the measurements displayed:Intensity_TdTomato
    Font size (points):15
    Number of decimals:3
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:bold

OverlayOutlines:[module_num:22|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notes:['Overlays the nuclear foci (green) with the cytoplasmic foci (red).']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DsRed
    Name the output image:overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:green
    Select objects to display:foci_MLF2
    Select outline color:red
    Select objects to display:HighlyExpressed
    Select outline color:#962DFF
    Select objects to display:SlightlyExpressed
    Select outline color:blue
    Select objects to display:NotExpressed

Tile:[module_num:23|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
    Select an input image:Intensity_TdTomato
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:8
    Final number of columns:12
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:Yes
    Automatically calculate number of columns?:Yes
    Select an additional image to tile:overlay

SaveImages:[module_num:24|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notes:['Saves image to specified file location. Must input where you would like the images to be saved.']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
    Select the type of image to save:Image
    Select the image to save:TiledImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DsRed
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Complement
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Desktop\\New_Data_AFTER_23_11_17\\Dylan_new\\AnalysisforotherLabMembers\\COMPLEMENTATION\\AnalyzedImages
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:25|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notes:['Saves Excel to specified file location. Must input where you would like the images to be saved.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\New_Data_AFTER_23_11_17\\Dylan_new\\AnalysisforotherLabMembers\\COMPLEMENTATION\\Analysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Threshold_SumOfEntropies_tdTomato,Image|Threshold_SumOfEntropies_Nuclei,Image|Threshold_SumOfEntropies_GFP_foci,Image|Threshold_FinalThreshold_Nuclei,Image|Threshold_FinalThreshold_GFP_foci,Image|Threshold_FinalThreshold_tdTomato,Image|Threshold_WeightedVariance_Nuclei,Image|Threshold_WeightedVariance_GFP_foci,Image|Threshold_WeightedVariance_tdTomato,Image|Threshold_OrigThreshold_tdTomato,Image|Threshold_OrigThreshold_Nuclei,Image|Threshold_OrigThreshold_GFP_foci,Image|Threshold_GuideThreshold_GFP_foci,Image|Metadata_SizeC,Image|Metadata_SizeX,Image|Metadata_Frame,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Complment
    Overwrite existing files without warning?:Yes
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