CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Date": "none", "FileLocation": "text", "Frame": "integer", "Series": "none"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Date>[0-9]{4}_[0-9]{2}_[0-9]{2})$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Hela_cells
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Hela_cells
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:mab414
    Convert green to gray?:Yes
    Name the output image:GFP
    Convert blue to gray?:Yes
    Name the output image:DNA
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):75,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Log transform before thresholding?:No
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:mab414
    Name the output image:Enhance_foci
    Select the operation:Enhance
    Feature size:35
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:mab414
    Name the output image:Large_EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:45
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:GFP
    Name the output image:EnhanceMLF2_GFP
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:EnhanceMLF2_GFP
    Name the primary objects to be identified:MLF2_GFP
    Typical diameter of objects, in pixel units (Min,Max):4,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.04,1.0
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    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:Enhance_foci
    Name the primary objects to be identified:Foci
    Typical diameter of objects, in pixel units (Min,Max):5,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
    Size of smoothing filter:2
    Suppress local maxima that are closer than this minimum allowed distance:2
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.09,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:12|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
    Select the input objects:Nuclei
    Name the objects to be identified:cyto_foci
    Select the method to identify the secondary objects:Propagation
    Select the input image:mab414
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:.45
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
RelateObjects:[module_num:13|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
    Parent objects:cyto_foci
    Child objects:Foci
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Relate_foci
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
IdentifySecondaryObjects:[module_num:14|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
    Select the input objects:Nuclei
    Name the objects to be identified:Secondary_GFP
    Select the method to identify the secondary objects:Propagation
    Select the input image:GFP
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:0.45
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
RelateObjects:[module_num:15|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
    Parent objects:Secondary_GFP
    Child objects:MLF2_GFP
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Relate_GFP
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
ColorToGray:[module_num:16|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
    Select the input image:Hela_cells
    Conversion method:Combine
    Image type:RGB
    Name the output image:gray_scale
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:gray_scale
    Name the output image:MLF2_and_Foci
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FF2B30
    Select objects to display:Relate_foci
    Select outline color:green
    Select objects to display:Relate_GFP

SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:MLF2_and_Foci
    Select method for constructing file names:From image filename
    Select image name for file prefix:Hela_cells
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cp
    Saved file format:tiff
    Output file location:Same folder as image|OneDrive\\Yale\\Spring 2023\\Schlieker Lab\\cell_profiler_imagebank
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|OneDrive\\Yale\\Spring_2023\\Schlieker_Lab\\cell_profiler_rawdata
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CellProfiler_exp_
    Overwrite existing files without warning?:Yes
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