CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Welcome to CondenScreen! A custom pipeline built using the open source CellProfiler 4 software package. ', '', 'To begin, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders. In the following example, the suffix of each image ends in w1, w2, or w3 to indicate the DAPI, GFP, or CellMask stains, respectively.    ', '         Note: When selecting "Start Test Mode" to tailor settings to your model, select the eyeball icons to visualize output. However, please deselect the eye icons when selecting "Analyze Images" as this will greatly reduce the speed at which your images are analyzed!', '', 'Note: If running into: ValueError: The input image has only 2 different values. It can not be thresholded in 3 classes. *Then try adjusting the fifth module ("IdentifyPrimaryObjects") by increasing the aaptive thresholding window.']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
    Filter images?:Custom
    Select the rule criteria:and (extension does istif) (file doesnot contain "(DAPI+GFP") (file doesnot contain "DsRed") (file doesnot contain "_Brightfield")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"C": "text", "ChannelName": "text", "ColorFormat": "text", "Date": "none", "FileLocation": "text", "Frame": "integer", "Plate": "text", "Series": "float", "Site": "text", "SizeC": "text", "SizeT": "text", "SizeX": "text", "SizeY": "text", "SizeZ": "text", "T": "text", "Well": "text", "Z": "text"}
    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it. In this case, we use the DAPI, GFP, and CellMask (red) channels.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "w1.")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "w2.")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w3.")
    Name to assign these images:Cell_Mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:ChannelName

IdentifyPrimaryObjects:[module_num:5|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notes:['Identifies and segregates nuclei by size (30-100 pixels) and shape from the DAPI channel. Uses adaptive, minimum cross-entropy thresholding with upper and lower bounds set to 0.1 and 1.0, respectively. The adaptive window is set to 40 pixels and each nucleus is distinguished using intensity followed by shape-based division', '']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.01,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:40
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    Thresholding method:Minimum Cross-Entropy

IdentifySecondaryObjects:[module_num:6|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notes:['Since we are interested in the nuclear periphery, the nucleus is expanded by a distance of four pixels to include any foci that may be protruding from the nuclear membrane.']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
    Select the input objects:Nuclei
    Name the objects to be identified:expanded_Nuclei
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DAPI
    Number of pixels by which to expand the primary objects:4
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifySecondaryObjects:[module_num:7|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notes:['This module (and subsequent dependencies) should be removed unless the user is staining cells with a secondary marker that delineates the cytoplasm/cell membrane. Uses global, Otsu three-class thresholding (foreground) with a threshold correction factor of 0.7. The lower and upper bounds are set to 0-1, but may be increased if there is an excess of non-specific object being detected.']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
    Select the input objects:expanded_Nuclei
    Name the objects to be identified:Cyto
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:Cell_Mask
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
EnhanceOrSuppressFeatures:[module_num:8|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notes:['Enhancing the nuclear foci features using speckle features to decrease contributions by background noise. The largest feature size it considers is 10 pixels which should be high enough for the majority of nuclear foci, even if there are instances of several foci fused together. Can be adjusted as needed.']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
    Select the input image:GFP
    Name the output image:EnhanceMLF2_GFP
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:9|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notes:['Depending on the foci/puncta being detected from the GFP channel, you will need to adjust the parameters by either increasing the typical diameter (0-10 pixels in this case) or the upper and lower threshold bounds (0.0175-1.0). If the majority of foci are not being accurately detected, lower the lower-bound threshold (<0.0175). If the detected signal is too high due to non-specific foci detection, increase the lower-bound (>0.0175). Identifies and segregates foci anywhere in the cell by size (1 to 15 pixels) and intensity from the GFP channel. ', 'After much testing, our system uses adaptive (20 pixels) Otsu three class (foreground) thresholding. This must be highly personalized based on your system. Keep in mind, identifying exactly 100% of foci correctly is near impossible, but aim for the most representative thresholding possible after training on multiple images across controls.']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
    Select the input image:EnhanceMLF2_GFP
    Name the primary objects to be identified:GFP_foci
    Typical diameter of objects, in pixel units (Min,Max):1,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0175,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

MeasureImageAreaOccupied:[module_num:10|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notes:['Measures the image area of the nuclei and GFP-foci. Can also include area of cell cytoplasm if staining with CellMask/other marker.']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
    Measure the area occupied by:Objects
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    Select object sets to measure:GFP_foci, Nuclei

MeasureObjectSizeShape:[module_num:11|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notes:['Measures the object size and shape of the nuclei detected from DAPI staining. Select calculate Zernike/advanced features, if required. Typically, can leave unchecked as this will increases computational processing intensity. Select "GFP_foci" if interested in seeing how the size/shape of each foci changes with tested perturbation (single-cell resolution note: previous module "MeasureImageAreaOccupied" gives the aggregate statistics on the area occupied by total GFP foci).']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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:12|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notes:['Measures the average, median, and integrated intensity (among other measurements) of the nuclei (DAPI channel) and foci (GFP channel). Note: The GFP intensity measurement is off as a lot of computational power is needed. However, if you do not mind the longer wait times and want to know changes in intensity of each foci, then select "GFP" under "Select images to measure" and "GFP_foci" under "Select objects to measure".']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
    Select images to measure:DAPI
    Select objects to measure:Nuclei

RelateObjects:[module_num:13|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notes:['Quantifies and relates the number of GFP-foci within individual cells to its parent nucleus.  Returns the number of foci per nucleus.']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
    Parent objects:expanded_Nuclei
    Child objects:GFP_foci
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:relate_Foci
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
RelateObjects:[module_num:14|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
    Parent objects:Cyto
    Child objects:GFP_foci
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Cytorelate_Foci
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
OverlayOutlines:[module_num:15|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notes:['(OPTIONAL) Overlays the nuclear foci (green), nuclear periphery (blue, expanded nucleus), and the cytoplasmic outline (red, if applicable).']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFP
    Name the output image:overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:green
    Select objects to display:relate_Foci
    Select outline color:red
    Select objects to display:Cyto
    Select outline color:Blue
    Select objects to display:expanded_Nuclei

SaveImages:[module_num:16|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notes:['(OPTIONAL) Saves image of detected foci (outlined, green) within each corresponding nucleus to specified file location. Must input where you would like the images to be saved. This is a great feature to use while tweaking the foci identification accuracy of your pipeline. However, if left on when analyzing >100’s images, it will take up a great deal of space and increases processing time. Must change output directory folder location.']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:CondenScreen
    Saved file format:png
    Output file location:Default Output Folder|Desktop\\New_Data_AFTER_23_11_17\\Dylan_new\\AnalysisforotherLabMembers\\ResultsTor1A_Version\\Images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:17|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notes:['Saves compiled CSV to specified file location. Must input where you would like the images to be saved.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|/vast/palmer/home.mccleary/djp94/palmer_scratch/cellP/Outputfolder
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|AreaOccupied_TotalArea_GFP_foci,Image|AreaOccupied_TotalArea_Nuclei,Image|AreaOccupied_Perimeter_Nuclei,Image|AreaOccupied_Perimeter_GFP_foci,Image|AreaOccupied_AreaOccupied_GFP_foci,Image|AreaOccupied_AreaOccupied_Nuclei,Image|FileName_DAPI,Nuclei|AreaShape_Area,Nuclei|AreaShape_FormFactor,Cyto|Children_GFP_foci_Count
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CondenScreen
    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:FociQuant.csv
    Use the object name for the file name?:No
    Data to export:Cyto
    Combine these object measurements with those of the previous object?:Yes
    File name:cytoFoci.csv
    Use the object name for the file name?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:AreaGFPratio.csv
    Use the object name for the file name?:No

CreateBatchFiles:[module_num:18|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notes:['Only use this module if youre using a cluster-based batching approach. If so', ' replace /home/user/cellP with the relevant path you want the batched analyzed files to export to. Will need to update and upload the CPBatch.sh file into the same directory and click Analyze Images. This will export a Batch_data.h5 file to the relevant directory. Then navigate to this directory using your clusters command line and run the following line: sbatch CPBatch.sh     This will begin the batching analysis. Analyzed .CSV files can be found in the relevant Results folders (each folder containing < 10 Gb for easy download ability. ']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enabled:False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
    Store batch files in default output folder?:No
    Output folder path:/home/UserX/pathName
    Are the cluster computers running Windows?:No
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    Local root path:/home/UserX/pathName
    Cluster root path:/home/UserX/pathName
