CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['scoTo begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "w1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "w2")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w3")
    Name to assign these images:Cell_Mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:ChannelName

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,125
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.01,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:nuclear_periphery
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DAPI
    Number of pixels by which to expand the primary objects:3
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:GFP
    Name the output image:EnhanceMLF2_GFP
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:EnhanceMLF2_GFP
    Name the primary objects to be identified:MLF2_GFP
    Typical diameter of objects, in pixel units (Min,Max):1,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.035,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:nuclear_periphery
    Name the objects to be identified:Cyto
    Select the method to identify the secondary objects:Propagation
    Select the input image:Cell_Mask
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MaskObjects:[module_num:10|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
    Select objects to be masked:Cyto
    Name the masked objects:Masked_Cyto
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

IdentifyTertiaryObjects:[module_num:11|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
    Select the larger identified objects:Masked_Cyto
    Select the smaller identified objects:nuclear_periphery
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

RelateObjects:[module_num:12|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
    Parent objects:nuclear_periphery
    Child objects:MLF2_GFP
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Relate_GFP_nuclei
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
RelateObjects:[module_num:13|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
    Parent objects:Cytoplasm
    Child objects:MLF2_GFP
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Relate_Cyto_MLF2
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
OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFP
    Name the output image:MLF2
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:green
    Select objects to display:Relate_GFP_nuclei
    Select outline color:red
    Select objects to display:Relate_Cyto_MLF2

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:MLF2
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cp_speed_test
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\Dylan\\cp_nuclei_test
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\Dylan\\cp_nuclei_test
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:MLF2_GFP|Distance_Minimum_nuclear_periphery,MLF2_GFP|Distance_Centroid_nuclear_periphery,MLF2_GFP|Number_Object_Number,MLF2_GFP|Children_Relate_Cyto_MLF2_Count,MLF2_GFP|Children_Relate_GFP_nuclei_Count,MLF2_GFP|Parent_nuclear_periphery,MLF2_GFP|Parent_Cytoplasm,Image|Frame_Cell_Mask,Image|Frame_GFP,Image|Frame_DAPI,Image|ExecutionTime_08IdentifyPrimaryObjects,Image|ExecutionTime_14OverlayOutlines,Image|ExecutionTime_05IdentifyPrimaryObjects,Image|ExecutionTime_03NamesAndTypes,Image|ExecutionTime_13RelateObjects,Image|ExecutionTime_11IdentifyTertiaryObjects,Image|ExecutionTime_15SaveImages,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CP_exp_speed_test
    Overwrite existing files without warning?:Yes
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